name: Demo - Workflow

metadata:
  author: Casey Stone, Abraham Stroka 
  info: Demonstration Workflow for BIO350 Workcell
  version: 0.1

modules:
  - name: solo
  - name: platecrane
  - name: hidex
  - name: sealer
  - name: peeler
  - name: liconic

flowdef:
  - name: Move plate from Stack1 to Solo.Position2
    module: platecrane
    action: transfer
    args:
      source: "Stack1"
      target: "Solo.Position2"
      plate_type: "flat_bottom_96well" 
    checks: null
    comment: Place plate in Solo Position2

  - name: Remove lid    
    module: platecrane
    action: remove_lid
    args:
      source: "Solo.Position2"
      target: "LidNest1"
      plate_type: "flat_bottom_96well"
    comment: Place plate lid on lid nest 2
  
  - name: Move platecrane to Safe location
    module: platecrane
    action: move_safe
    args:
      foo: "bar"
    checks: null
    comment: Move platecrane out of the way of SOLO arm
  
  - name: Refill Tips
    module: solo
    action: refill_tips
    args:
      position: payload.tip_box_position
    checks: null
    comment: Reset Tip Box Number to 96 Tips

   # STEP 1
  - name: Mix Reactions
    module: solo
    action: run_protocol
    args:
      hso_contents: payload.hso_1
      hso_num_lines: payload.hso_1_lines
      hso_basename: payload.hso_1_basename
    checks: RESOURCE_CHECK
    comment: resource check not implemented, but will be

  - name: Open Hidex
    module: hidex
    action: open
    args: 
      foo: "bar"
    checks: null
    comment: Open Hidex Gate

  - name: Move plate from Solo Position2 to Hidex Nest
    module: platecrane
    action: transfer
    args:
      source: "Solo.Position2"
      target: "Hidex.Nest"      
      plate_type: "flat_bottom_96well"
      height_offset: 8
    checks: null
    comment: Place plate to Hidex Nest

  - name: Close Hidex
    module: hidex
    action: close
    args: 
      foo: "bar"
    checks: null
    comment: Close Hidex Gate

  - name: Open Hidex
    module: hidex
    action: open
    args: 
      foo: "bar"
    checks: null
    comment: Open Hidex Gate

  - name: Move plate from Hidex.Nest to Sealer
    module: platecrane
    action: transfer
    args:
      source: "Hidex.Nest"
      target: "Sealer.Nest"
      plate_type: "flat_bottom_96well"
      height_offset: 8
    checks: null
    comment: Place plate to Sealer

  - name: Close Hidex
    module: hidex
    action: close
    args: 
      foo: "bar"
    checks: null
    comment: Close Hidex Gate

  - name: Seal plate
    module: sealer
    action: seal
    args:
      time: payload:seal.time
      temperature: 175
    checks: null
    comment: Seal the plate

  - name: Move plate from Sealer to Liconic
    module: platecrane
    action: transfer
    args:
      source: "Sealer.Nest"
      target: "Liconic.Nest"
      plate_type: "flat_bottom_96well"
    checks: null
    comment: Place plate onto Liconic

  - name: Load Liconic
    module: liconic
    action: load_plate
    args: 
      plate_id: "1"
    checks: null
    comment: Load assay plate into Liconic

  - name: Start shaker at set speed
    module: liconic
    action: begin_shake
    args: 
      shaker_speed: payload.shaker_speed
    checks: null
    comment: Stage pcr plates

  - name: Unload Liconic
    module: liconic
    action: unload_plate
    args: 
      plate_id: "1"
    checks: null
    comment: Stage pcr plates
      
  - name: Move plate from Liconic to Peeler
    module: platecrane
    action: transfer
    args:
      source: "Liconic.Nest"
      target: "Peeler.Nest"
      plate_type: "flat_bottom_96well"
    checks: null
    comment: Place plate onto PeelerNest
  
  - name: Peel
    module: peeler
    action: peel
    args:
      test: null
    checks: null
    comment: null
    
  - name: Open Hidex
    module: hidex
    action: open
    args: 
      foo: "bar"
    checks: null
    comment: Open Hidex Gate

  - name: Move plate from Peeler.Nest to Hidex.Nest
    module: platecrane
    action: transfer
    args:
      source: "Peeler.Nest"
      target: "Hidex.Nest"
      plate_type: "flat_bottom_96well"
      height_offset: 8
    checks: Transfer assay plate from Peeler to Hidex
    comment: Place plate in Hidex Nest

  - name: Close Hidex
    module: hidex
    action: close
    args: 
      foo: "bar"
    checks: null
    comment: Close Hidex Gate

  - name: Open Hidex
    module: hidex
    action: open
    args: 
      foo: "bar"
    checks: null
    comment: Open Hidex Gate

  - name: Move plate from HidexNest to Stack1
    module: platecrane
    action: transfer
    args:
      source: "Hidex.Nest"
      target: "Stack5"
      plate_type: "flat_bottom_96well"
      height_offset: 8
    checks: null
    comment: Place plate into trash Stack

  - name: Close Hidex
    module: hidex
    action: close
    args: 
      foo: "bar"
    checks: null
    comment: Close Hidex Gate
     

