name: Growth Curve (T0) - Workflow

metadata:
  author: Casey Stone, Abraham Stroka
  info: create_plate_T0 Workflow for BIO350 multi growth_app application
  version: 0.1

flowdef:
  - name: Move plate from Stack1 to Solo.Position2
    module: platecrane
    action: transfer
    args:
      source: "Stack1"
      target: "Solo.Position2"
      plate_type: "flat_bottom_96well"
    checks: null
    comment: Place plate in Solo Position2

  - name: Remove lid
    module: platecrane
    action: remove_lid
    args:
      source: "Solo.Position2"
      target: "LidNest1"
      plate_type: "flat_bottom_96well"
    comment: Place plate lid on lid nest 2

  - name: Move platecrane to Safe location
    module: platecrane
    action: move_safe
    args:
      foo: "bar"
    checks: null
    comment: Move platecrane out of the way of SOLO arm

  #   # STEP 1
  - name: Mix Reactions
    module: solo
    action: run_protocol
    files:
      protocol_file: payload.hso_1_path
    checks: RESOURCE_CHECK
    comment: resource check not implemented, but will be

  #   # STEP 2
  # - name: Mix Reactions
  #   module: solo
  #   action: run_protocol
  #   files:
  #     protocol_file: payload.hso_2_path
  #   checks: RESOURCE_CHECK
  #   comment: resource check not implemented, but will be

  #   # STEP 3
  # - name: Mix Reactions
  #   module: solo
  #   action: run_protocol
  #   files:
  #     protocol_file: payload.hso_3_path
  #   checks: RESOURCE_CHECK
  #   comment: resource check not implemented, but will be

  # - name: Open Hidex
  #   module: hidex
  #   action: open
  #   args:
  #     foo: "bar"
  #   checks: null
  #   comment: Open Hidex Gate

  # - name: Move plate from Solo Position2 to Hidex Nest
  #   module: platecrane
  #   action: transfer
  #   args:
  #     source: "Solo.Position2"
  #     target: "Hidex.Nest"
  #     plate_type: "flat_bottom_96well"
  #     height_offset: 8
  #   checks: null
  #   comment: Place plate to Hidex Nest

  # - name: run Hidex
  #   module: hidex
  #   action: run_assay
  #   args:
  #     assay_name: "Campaign2_wei_cs"
  #   data_labels:
  #     assay_result: T0_result
  #   checks: null
  #   comment: Run protocol at hidex

  # - name: Open Hidex
  #   module: hidex
  #   action: open
  #   args:
  #     foo: "bar"
  #   checks: null
  #   comment: Open Hidex Gate

  # REPLACE LID
  - name: Replace lid
    module: platecrane
    action: replace_lid
    args:
      source: "LidNest1"
      target: "Solo.Position2"
      plate_type: "flat_bottom_96well"
    comment: Replace lid onto plate

  # - name: Move plate from Solo.Position2 to Sealer.Nest
  #   module: platecrane
  #   action: transfer
  #   args:
  #     source: "Solo.Position2"
  #     target: "Sealer.Nest"
  #     plate_type: "flat_bottom_96well"
  #   checks: null
  #   comment: Place plate to Sealer

  # - name: Close Hidex
  #   module: hidex
  #   action: close
  #   args:
  #     foo: "bar"
  #   checks: null
  #   comment: Close Hidex Gate

  # - name: Seal plate
  #   module: sealer
  #   action: seal
  #   args:
  #     time: payload:seal.time
  #     temperature: 175
  #   checks: null
  #   comment: Seal the plate

  # - name: Move plate from Sealer to Liconic
  #   module: platecrane
  #   action: transfer
  #   args:
  #     source: "Sealer.Nest"
  #     target: "Liconic.Nest"
  #     plate_type: "flat_bottom_96well"
  #   checks: null
  #   comment: Place plate onto Liconic

  # MOVE PLATE INTO INCUBATOR
  - name: Move plate from Position2 to Liconic
    module: platecrane
    action: transfer
    args:
      source: "Solo.Position2"
      target: "Liconic.Nest"
      plate_type: "flat_bottom_96well"
    checks: null
    comment: Place plate onto Liconic

  - name: Load Liconic
    module: liconic
    action: load_plate
    args:
      plate_id: payload.plate_id
      stacker: null
      slot: null
    checks: null
    comment: Load assay plate into Liconic

  # DO NOT SHAKE UNTIL THE SHAKER IS INSTALLED
  # - name: Start shaker at set speed
  #   module: liconic
  #   action: begin_shake
  #   args:
  #     shaker_speed: payload.shaker_speed
  #   checks: null
  #   comment: Shake the assay plate in Liconic
