metadata:
  name: Multi-Growth Assay Run Workflow
  author: Alp Demirtas
  info: Growth Assay Workflow and all of its individual components called from the multi_growth_curve.py file
  version: 1.3

workcell: /home/rpl/workspace/BIO_workcell/bio_workcell/bio_workcell.yaml

modules:
  - name: solo
  - name: peeler
  - name: sealer
  - name: plateEx
  - name: camera

flowdef:
  - name: Open Hidex
    module: hidex
    command: open
    args: 
      foo: "bar"
    checks: null
    comment: Open Hidex Gate

  - name: Close Hidex
    module: hidex
    command: close
    args: 
      foo: "bar"
    checks: null
    comment: Close Hidex Gate